Key	Value
CellProfiler_Version	2016-03-08T19:17:57 b91da8e
ChannelType_DF_image	Grayscale
ImageSet_Zip_Dictionary	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
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160308191757
GitHash:b91da8e
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain ""ch4"")
    Name to assign these images:DF_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
DefineGrid:[module_num:5|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
    Name the grid:Grid
    Number of rows:15
    Number of columns:15
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
    Select the previously identified objects:BF
    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:27,27
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:82,82
    Row number of the second cell:2
    Column number of the second cell:2
    Retain an image of the grid?:No
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    Select the image on which to display the grid:DF_image
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:6|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
    Select the defined grid:Grid
    Name the objects to be identified:SSC
    Select object shapes and locations:Rectangle Forced Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
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    Retain outlines of the identified objects?:Yes
    Name the outline image:GridOutlines

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DF_image
    Name the output image:DF_Overlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:GridOutlines
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
MeasureGranularity:[module_num:8|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
    Image count:1
    Object count:1
    Select an image to measure:DF_image
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:5
    Select objects to measure:SSC

MeasureObjectIntensityDistribution:[module_num:9|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DF_image
    Select objects to measure:SSC
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:10|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DF_image
    Select objects to measure:SSC
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:DF_image
    Select objects to measure:SSC

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:SSC
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\\\\\\\\extracted_cellprofiler_features
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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"
Run_Timestamp	2017-01-25T10:43:28.437930
